PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'%s/%s_%s_%s' % (expInfo['subjectID'], expInfo['subjectID'], expName, formatted_date)
  Experiment info = {'subjectID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = cm
  Window size (pixels) = [1512, 982]
  color = black
  expName = painSizeTask
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Setings
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    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent preSettings
      Code Type = Py
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      Before Experiment:
        from datetime import datetime
        # Get the current date and time
        current_datetime = datetime.now()
        # Format the date and time as 'yyyymmddhhmmss'
        formatted_date = current_datetime.strftime('%Y%m%d%H%M%S')
      Begin Experiment:
        #take all libraries needed for the study
        import random
        import time
        from psychopy.tools.filetools import fromFile, toFile#no idea why but it is a neccessity
        from painSize_instructions_20240425 import size_PainTask, size_PainInstr, intens_PainTask, intens_PainLeft, intens_PainRight, intens_PainInstr
        from painSize_instructions_20240425 import unp_PainTask, unp_PainLeft, unp_PainRight, unp_PainInstr
        from painSize_instructions_20240425 import beginPractice, size_PainPractice, intens_unp_PainPractice
        intX=(-7.5)
        test_start = core.monotonicClock.getTime()
        ISI = 2
        time.sleep(2)#that lapse is crucial to laod all of the packages
      Begin Routine:
        #Preliminary instruction
        txtStart = visual.TextStim(win, beginPractice,
                               color=(255,255,255), colorSpace='rgb', alignText='center',units='cm', pos=(0,0), height=0.8, wrapWidth=30)
      Each Frame:
        win.mouseVisible = False
    TextComponent txtStart
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Wait
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    TextComponent textStim4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        #Preliminary instruction
        textStim4 = visual.TextStim(win, 'Wait...',
                               color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,0), height=1, wrapWidth=30)


        textStim5 = visual.TextStim(win, size_PainPractice,
                               color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,0), height=1, wrapWidth=30)
      Each Frame:
        win.mouseVisible = False
    KeyboardComponent Go3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    MouseComponent MouseSwitch1
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    TextComponent textStim5
      letterHeight = 0.1
      startVal [time (s)] = 1
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  Routine PAIN_size
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    MouseComponent SizeMouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent SizeCode
      Code Type = Py
      Begin Routine:
        #Mouse settings here:
        intX=1
        SizeMouse.setPos((0,0))
        #Setup the text displayed in the screen
        #Task to participant
        rateS = visual.TextStim(win, size_PainTask,
                               color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,9), height=1.5, wrapWidth=30)
        #Instruction
        rateInstruction = visual.TextStim(win, size_PainInstr,
                               color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,-9), height=0.6, wrapWidth=30)
      Each Frame:
        #white_rect.setPos((mouse.getPos()[0],0), log=False)
        currentPosI = SizeMouse.getPos()
        xPosI = currentPosI[0]
        xSize = abs(xPosI)
        intX = xSize
        win.mouseVisible = False
      End Routine:
        #what is the postion of cursor?
        mouse_click = SizeMouse.getPos()
        #what was the last 'x' coordinate?
        x_clickS = abs(mouse_click[0])
        #calculate the surface and save with 3 decimal
        painSize = round(x_clickS*x_clickS,3)
        #save data
        loopSize.addData('Size_Rating', painSize)#was thisExp
        loopSize.addData('Size_Rating_duration(sec)', t)
    PolygonComponent ThermodeRect
      fillColor = black
      lineColor = black
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (1.6, 1.6)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent PainRect
      fillColor = red
      lineColor = red
      saveStartStop = False
      shape = rectangle
      size [set every frame] = (intX,intX)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent rateS
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent rateInstruction
      color = cyan
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine PAIN_int
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    TextComponent ratePain
      letterHeight = 1.5
      pos = (0,9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 20
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    TextComponent noPain
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent maxPain
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent red_int
      fillColor = red
      lineColor = black
      lineWidth = 2
      pos = (intX,0)
      saveStartStop = False
      shape = rectangle
      size = (15,3)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent white_int
      fillColor = white
      lineColor = black
      pos [set every frame] = (intX,0)
      saveStartStop = False
      shape = rectangle
      size = (15,3)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent leftTr
      fillColor = white
      ori = 180
      pos = (-15.0, 2.0)
      saveStartStop = False
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent rightTri
      fillColor = white
      ori = 180
      pos = (0, 2.0)
      saveStartStop = False
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      units = cm
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    MouseComponent MouseInt
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent IntCode
      Code Type = Py
      Begin Routine:
        #Mouse settings
        intX=-7.5
        MouseInt.setPos((-7.5,0))

        #Task
        ratePain = visual.TextStim(win,intens_PainTask,
        color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,9), height=1.3, wrapWidth=35)

        #Left anchor of VAS
        noPain = visual.TextStim(win, intens_PainLeft, color='white', colorSpace='rgb',
        alignText='center', units='cm', pos=(-16,3), height=0.5)

        #Right anchor of VAS
        maxPain = visual.TextStim(win, intens_PainRight, color='white', colorSpace='rgb',
        alignText='center', units='cm', pos=(2,3), height=0.5)

        #VAS instruction
        intensInstruction = visual.TextStim(win, intens_PainInstr,
                               color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,-9), height=0.6, wrapWidth=16)
      Each Frame:
        #white_rect.setPos((mouse.getPos()[0],0), log=False)
        win.mouseVisible = False
        currentPosI = MouseInt.getPos()
        xPosI = currentPosI[0]
        #xPos = [mouse.getPos()[0], 0]
        if xPosI < -7.5:
            intX=-7.5
        elif xPosI > 7.5:
        #    whitePos=(8.375,0)
            intX=7.5
        else:
        #    whitePos=(xPos,0)
            intX=xPosI
      End Routine:
        mouse_click = MouseInt.getPos()
        x_clickI = mouse_click[0]
        #xPos = [mouse.getPos()[0], 0]
        if x_clickI < -7.5:
            intX_click=-7.5

        elif x_clickI > 7.5:
        #    whitePos=(8.375,0)
            intX_click=7.5

        else:
        #    whitePos=(xPos,0)
            intX_click=xPosI
        #white_rect.setPos((xPos,0), log=False)
        distance = round((intX_click - (-7.5))*(0.66666666667),3)

        loopSize.addData('Intensity_Rating', distance)
        loopSize.addData('Intensity_Rating_duration(sec)', t)
    TextComponent intensInstruction
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine PAIN_unp
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    TextComponent rateUnp
      letterHeight = 1.5
      pos = (0,9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
      wrapWidth = 25
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    TextComponent noUnp
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent maxUnp
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent red_Unp
      fillColor = red
      lineColor = black
      lineWidth = 2
      pos = (intX,0)
      saveStartStop = False
      shape = rectangle
      size = (15,3)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent white_Unp
      fillColor = white
      lineColor = black
      pos [set every frame] = (intX,0)
      saveStartStop = False
      shape = rectangle
      size = (15,3)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent leftAr
      fillColor = white
      ori = 180
      pos = (-15.0, 2.0)
      saveStartStop = False
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent rightAr
      fillColor = white
      ori = 180
      pos = (0, 2.0)
      saveStartStop = False
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      units = cm
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    MouseComponent MouseUnp
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent UnpCode
      Code Type = Py
      Begin Routine:
        #Mouse settings
        intX=-7.5
        MouseUnp.setPos((-7.5,0))

        #Task
        rateUnp = visual.TextStim(win,unp_PainTask,
        color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,9), height=1.3, wrapWidth=35)

        #Left anchor of VAS
        noUnp = visual.TextStim(win, unp_PainLeft, color='white', colorSpace='rgb',
        alignText='center', units='cm', pos=(-16,3), height=0.5)

        #Right anchor of VAS
        maxUnp = visual.TextStim(win, unp_PainRight, color='white', colorSpace='rgb',
        alignText='center', units='cm', pos=(2,3), height=0.5)

        #VAS instruction
        unpInstruction = visual.TextStim(win, unp_PainInstr,
                               color='white', colorSpace='rgb', alignText='center',units='cm', pos=(0,-9), height=0.6, wrapWidth=30)
      Each Frame:
        #white_rect.setPos((mouse.getPos()[0],0), log=False)
        win.mouseVisible = False
        currentPosI = MouseUnp.getPos()
        xPosI = currentPosI[0]
        #xPos = [mouse.getPos()[0], 0]
        if xPosI < -7.5:
            intX=-7.5
        elif xPosI > 7.5:
        #    whitePos=(8.375,0)
            intX=7.5
        else:
        #    whitePos=(xPos,0)
            intX=xPosI
      End Routine:
        mouse_click = MouseUnp.getPos()
        x_clickI = mouse_click[0]
        #xPos = [mouse.getPos()[0], 0]
        if x_clickI < -7.5:
            intX_click=-7.5

        elif x_clickI > 7.5:
        #    whitePos=(8.375,0)
            intX_click=7.5

        else:
        #    whitePos=(xPos,0)
            intX_click=xPosI
        #white_rect.setPos((xPos,0), log=False)
        distance = round((intX_click - (-7.5))*(0.66666666667),3)

        loopSize.addData('Unpleasant_Rating', distance)
        loopSize.addData('Unpleasant_Rating_duration(sec)', t)
    TextComponent unpInstruction
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Closing
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    TextComponent textEnd
      letterHeight = 1.0
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent keyEnding
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent codeEnding
      Code Type = Py
      Begin Routine:
        from painSize_instructions_20240425 import ending
        textEnd = visual.TextStim(win, ending,
                               color=(255,255,255), colorSpace='rgb', alignText='center',units='cm', pos=(0,0), height=0.8, wrapWidth=30)
Flow
  Routine Setings
  LoopInitiator loopSize loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine PAIN_size
    Routine PAIN_int
    Routine PAIN_unp
  LoopTerminator loopSize
  Routine Closing
